# Retroactivity model made in the Basic BNGL Model 

	# Retroactivity model made in the Basic BNGL Model 
	
	#Original Dynamics
	
	begin model
	
	begin parameters
	
	kon ((3*10^8)*60.0)/((6.022*(10.0^23)*(42.0*(10.0^(-15)))))
	koff 30*60
	s 50.0
	d 0.02
	d2 0.06
	d3 0.02 
	d5 d3
	k 0.09/50
	k2 0.8
	a 0.01
	k3 0.5
	
end parameters

begin molecule types
	#Isolated
	S(b) #Signaling component it has one DNA binding site l
	A(b) #Autoactivator it has also one DNA binding site to its own promoter
	AaP(b)  #Autoactivator promoter has 8 potential sites to be bound by TF. 
	#A single binding can change the whole promoter to an active transcription form
	Null()
	RNA()
	RP(b)
	
end molecule types

begin seed species
	#Isolated
	S(b) s
	A(b) 0
	AaP(b) 1
	$Null() 1
	RNA() 0
	RP(b) 300
end  seed species

begin observables
	Molecules A A(b)
	Molecules R RP(b!1).A(b!1)	
	Molecules RNA RNA()
	Molecules S S(b)
	
end observables

begin reaction rules

	AaP(b) -> AaP(b) + RNA() a

	AaP(b) + S(b) -> AaP(b) + S(b) + RNA() k
	
	RNA() -> RNA() + A(b) k2

#	AaP(b) + A(b) <-> AaP(b!0).A(b!0) kon, koff 
	
#	AaP(b!0).A(b!0) -> AaP(b!0).A(b!0) + RNA() k3
	
	RP(b) + A(b) <-> RP(b!1).A(b!1) kon, koff
	
	A(b) -> Null d
	
	RNA() -> Null d2
	
#	AaP(b!0).A(b!0) -> AaP(b) d3
	
	RP(b!1).A(b!1) -> RP(b) d3
	
	
end reaction rules
end model

#ACTIONS

generate_network({overwrite=>1});
#simulate_ode({t_end=>1440,n_steps=>1440,verbose=>1});

simulate_ssa({t_end=>1440,n_steps=>2880});
